PsychoPy2experiment version="2021.1.4"
Settings
  Completed URL = https://app.prolific.co/submissions/complete?cc=4ACE9377
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = pix
  Window size (pixels) = [1920, 1080]
  expName = face_sim_masking_el_2f
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Routines
  Routine welcome_instr
    TextComponent text_54
      color = yellow
      letterHeight = 0.1
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text = You may quit the experiment at anytime by pressing <ESC>
      units = norm
      wrapWidth = 1000
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    TextComponent welcome
      color = yellow
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Welcome to this experiment

        This will take about 45 minutes
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      saveStartStop = False
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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  Routine instr_1
    TextComponent text_1
      color = yellow
      letterHeight = 0.08
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Before starting the main experiment, we need to do some quick calibrations to ensure your screen is set up correctly.
      units = norm
      wrapWidth = 1.5
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    TextComponent space_2
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
      wrapWidth = 1.5
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    TextComponent text_2
      letterHeight = 0.08
      pos = (0,-0.4)
      startVal [time (s)] = 0.0
      text = Warning! It is critical that these calibrations are done correctly or you will be unable to do the experiment and we will be unable to approve your payment!
      units = norm
      wrapWidth = 1.5
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    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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  Routine instr_7
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_6
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_2
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
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    TextComponent text_7
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        3. Stare at the middle of the screen, keeping your head in the same position as before.
        Keep your right eye closed.
    PolygonComponent center_cross
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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  Routine instr_9
    KeyboardComponent key_resp_11
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_8
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_4
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
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    TextComponent text_11
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        5. During the calibration task, a white ball will disappear as it moves from right to left.
        Keep your right eye closed, stare at the black square and do not move your head.
    PolygonComponent center_cross_2
      fillColor = $[1,1,1]
      lineWidth = 0.8
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent black_square1
      fillColor = black
      lineColor = black
      lineWidth = 1.5
      pos = (500,0)
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_12
      color = black
      letterHeight = 0.03
      pos = (0.7, 0.08)
      startVal [time (s)] = 0.0
      text = <--- Ball movement 
      units = norm
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    PolygonComponent white_ball2
      fillColor = white
      nVertices = 1000
      pos = (400, 0)
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      units = pix
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  Routine stim1_instr
    MovieComponent stim1
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 1stimmov.mp4
      pos = (0, 100)
      size = 600,400
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_14
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
      syncScreenRefresh = False
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    TextComponent space_13
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent text_16
      color = yellow
      letterHeight = 0.04
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Throughout the experiment, focus on the cross at the centre of the screen.
        A face will flash out quickly on the screen. Sometimes the face will be preceded and followed by a mask and this could greatly reduce the visibility of the face.
  Routine stim_response_instr
    MovieComponent movie_2
      No audio = True
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = 1stim_async_response_py.mp4
      pos = (0, 150)
      size = 600,400
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_15
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_14
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
      wrapWidth = 1000
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    TextComponent text_17
      color = yellow
      letterHeight = 0.04
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        During the main experiment, you will need to decide the similarity levels of the previous face to a face centrally presented on the next screen.
        Ignore any size differences.

        0 => most similar face (least different face)
        7 => most different face (least similar face)

        Throughout  the experiment, please try to use the entire response scale, from 0 to 7.

        After choosing, move your cursor back to the centre and click and hold the box to continue.

        Even if you cannot clearly see the first face, try to select the response that match your experience as much as possible.
  Routine catch_insrt
    TextComponent space_15
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    KeyboardComponent key_resp_17
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    MovieComponent movie_3
      backend = moviepy
      forceEndRoutine = False
      loop = True
      movie = catch_py.mp4
      pos = 0,100
      size = 600,400
      startVal [time (s)] = 0.0
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    TextComponent text_18
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Sometimes there will be a special trial where you will just be asked to click on a particular value.
        Please click and hold the value for that trial.
  Routine calibration_example
    PolygonComponent white_ball1
      fillColor = white
      nVertices = 1000
      pos [set every frame] = [((-frameN*((window.innerWidth/2)*0.003))+ballpos), 0]
      shape = regular polygon...
      size [set every frame] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 250
      units = pix
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    PolygonComponent black_square3
      fillColor = black
      lineColor = black
      lineWidth = 1.5
      pos [set every frame] = ((window.innerWidth/2)*0.8,0)
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_19
      color = green
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 250
      text = VISIBLE
      units = norm
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    TextComponent text_20
      color = red
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [frame N] = 250
      stopVal [frame N] = 320
      text = INVISIBLE
      units = norm
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    PolygonComponent white_ball12
      fillColor = white
      nVertices = 1000
      pos [set every frame] = [((-frameN*((window.innerWidth/2)*0.003))+((window.innerWidth/2)*0.05)), 0]
      shape = regular polygon...
      size [set every frame] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [frame N] = 320
      stopVal [frame N] = 400
      units = pix
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    TextComponent text_21
      color = green
      letterHeight = 0.05
      pos = (0, 0.5)
      startVal [frame N] = 320
      text = VISIBLE
      units = norm
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    TextComponent text_22
      color = green
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [frame N] = 250
      stopVal [frame N] = 320
      text = Press <ENTER> now!
      units = norm
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    PolygonComponent white_ball13
      fillColor = white
      nVertices = 1000
      pos [set every frame] = [(((-frameN+400)*((window.innerWidth/2)*0.003))+ballpos), 0]
      shape = regular polygon...
      size [set every frame] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [frame N] = 400
      stopVal [frame N] = 550
      units = pix
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        ballpos = (window.innerWidth/2)*0.75;
      Each Frame:
        if frameN == 550:
            continueRoutine = False
  Routine response
    MouseComponent mouse
      clickable = response1disk,response3disk,response5disk,response7disk
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        order = randint(1,100);
      Begin Routine:
        # Count trial numbers
        event.clearEvents()
        trialnumber =  trialnumber + 1;
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d

        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            similarity = 7
            sim7 = sim7 + 1
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            similarity = 6
            sim6 = sim6 + 1
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            similarity = 5
            sim5 = sim5 + 1
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            similarity = 4
            sim4 = sim4 + 1
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            similarity = 3
            sim3 = sim3 + 1
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            similarity = 2
            sim2 = sim2 + 1
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            similarity = 1
            sim1 = sim1 + 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            similarity = 0
            sim0 = sim0 + 1

        #thisExp.addData("Ecc", Ecc);
        thisExp.addData("similarity", similarity);
        thisExp.addData("response_time", mouse.mouseClock.getTime())  # Save time relative to start of mouse
        thisExp.addData("sim0", sim0);
        thisExp.addData("sim1", sim1);
        thisExp.addData("sim2", sim2);
        thisExp.addData("sim3", sim3);
        thisExp.addData("sim4", sim4);
        thisExp.addData("sim5", sim5);
        thisExp.addData("sim6", sim6);
        thisExp.addData("sim7", sim7);
        thisExp.addData("face_frames", face_frames);
        #thisExp.addData("soa_frames", soa_frames);
        thisExp.addData("mask_frames", mask_frames);
        thisExp.addData("face_duration", face_duration);
        #thisExp.addData("soa_duration", soa_duration);
        thisExp.addData("mask_duration", mask_duration);

        # Log Similarity

        print("Similarity is", similarity)
    ImageComponent response1disk
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response3disk
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response5disk
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response7disk
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
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    TextComponent text_23
      color = black
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please choose the similarity level of the face with the previously cued face.
        Please click and hold to indicate your choice.
        0 => Most similar
        7 => Most different
    ImageComponent face2_2
      image [set every repeat] = $face2
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (15*ratio_pxpermm, 15*ratio_pxpermm*ratio_hw)
      startVal [time (s)] = 0.0
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    CodeComponent restore_mouse
      Code Type = Auto->JS
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  Routine Stim1_display
    PolygonComponent centre_cross4
      disabled = True
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.03, 0.03)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $mask_dur
      units = norm
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    TextComponent centre_cross_2
      letterHeight = 0.04
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.5
      text = +
      units = height
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    ImageComponent forward_mask
      image [set every repeat] = $mask
      pos [set every repeat] = $(circle1posx,circle1posy)
      size [set every repeat] = $(circlesizew,circlesizeh*ratio_hw)
      startVal [frame N] = 0
      stopVal [duration (frames)] = $mask_frames
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    ImageComponent face1_target
      image [set every repeat] = $face1
      pos [set every repeat] = $(circle1posx,circle1posy)
      size [set every repeat] = $(circlesizew,circlesizeh*ratio_hw)
      startVal [frame N] = $mask_frames
      stopVal [duration (frames)] = $face_frames
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    ImageComponent backward_mask
      image [set every repeat] = $mask
      pos [set every repeat] = $(circle1posx,circle1posy)
      size [set every repeat] = $(circlesizew,circlesizeh*ratio_hw)
      startVal [frame N] = $face_frames + mask_frames
      stopVal [duration (frames)] = $mask_frames
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  Routine response_2
    MouseComponent mouse_2
      clickable = rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent response1disk_2
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_2
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_2
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_2
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.100, 0.080)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Experiment:
        trialnumber = 0;
        grey = (.2, .2, .2);
      Begin Routine:
        trialnumbertext = f'You have finished {trialnumber} of 256 questions';

        event.clearEvents()
    TextComponent text_25
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Please click and hold the grey rectangle in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    TextComponent text_24
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
      units = norm
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  Routine catch_1
    MouseComponent mouse_3
      clickable = response1disk_3,response3disk_3,response5disk_3,response7disk_3,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent response1disk_3
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_3
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_3
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_3
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
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    TextComponent text_26
      color = black
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $catchtext
      units = norm
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    PolygonComponent rectangle_2
      fillColor = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.100, 0.080)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent catch_save
      Code Type = Auto->JS
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      Each Frame:
        if myCounter not in catch_trials_list:
            continueRoutine = False
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d





        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            catchresponse  = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            catchresponse  = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            catchresponse  = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            catchresponse  = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            catchresponse  = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            catchresponse  = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            catchresponse  = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            catchresponse = 0

        print("Catch number is", catchnumber)
        print("Catch response is", catchresponse)

        thisExp.addData("catchresponse", catchresponse);
        thisExp.addData("catchnumber", catchnumber);
        thisExp.addData("response_time_catch", mouse_3.mouseClock.getTime())  # Save time relative to start of mouse
        thisExp.addData("Catch", iscatch)
    CodeComponent beth_catch_2
      Code Type = Auto->JS
      disabled = True
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      Begin Routine:
        catchnumber = randint(0,7)

        event.clearEvents()

        catchtext = f'SPECIAL TRIAL PLEASE CLICK AND HOLD {catchnumber}'
      Each Frame:
        if myCounter not in catch_trials_list:
            continueRoutine = False
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a+b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d





        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            catchresponse  = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            catchresponse  = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            catchresponse  = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            catchresponse  = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            catchresponse  = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            catchresponse  = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            catchresponse  = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            catchresponse = 0

        print("Catch number is", catchnumber)
        print("Catch response is", catchresponse)

        thisExp.addData("catchresponse", catchresponse);
        thisExp.addData("catchnumber", catchnumber);
        thisExp.addData("response_time_catch", mouse_3.mouseClock.getTime())  # Save time relative to start of mouse
        #thisExp.addData("Catch", iscatch)
  Routine startup
    CodeComponent js_code1
      Code Type = Both
      Begin JS Experiment:
        // Code to convert python to javascript that is not automatically converted

        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager

        shuffle = function (a) {
            return util.shuffle(a);
        }
        random = function (a) {
            return Math.random();
        }
        range = function(start, end) {
            var ans = [];
            for (let i = start; i <= end; i++) {
                ans.push(i);
            }
            return ans;
        }


        randint = function(min, maxplusone) {
          return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        Array.prototype.append = [].push

        sum = function (arr) {
        return arr.reduce((a,b)=>a+b)
        }

        // math functions

        //PI = Math.PI

        //SIN = function (a) {
        //return Math.sin(a);
        //}

        //COS = function (a) {
        //return Math.cos(a);
        //}

        tan = function (a) {
        return Math.tan(a);
        }

        // Estimate frame rate

        closest_frames = function(sec, dur) {
            return Math.round(sec/dur);
        }

        get_frame_rate = function(){
            return psychoJS.window.getActualFrameRate()
        }

        randomArray = function(length, max) {
            return Array.apply(null, Array(length)).map(function() {
                return Math.round(Math.random() * max);
            });
        }
    CodeComponent hardcode
      Code Type = Both
      Begin Experiment:
        screen_size_x = 527.4725275
        screen_size_y = 296.7032967
        x_scale = 36.4
        ratio_pxpermm = 3.64
        viewerdistancecm = 61
        DVA_to_distance = 10.6475858
        radius_F = 58.13581846
        radius_P = 387.5721231
        r_F = 38.75721231
        R_P = 144.1768298
        flip_dur = 16.69451972
        dur = 0.01669452
      Begin JS Experiment:
        screen_size_x = 320;
        screen_size_y = 180;
        x_scale = 60;
        ratio_pxpermm = 6;
        viewerdistancecm = 55;
        DVA_to_distance = 8.727529343;
        radius_F = 78.54776409;
        radius_P = 523.6517606;
        r_F = 52.36517606;
        R_P = 235.6432923;
        flip_dur = 16.69451972;
        dur = 0.01669452;
    CodeComponent estimate_dur
      Code Type = Both
      Begin JS Routine:
        // estimate dur

        frame_rate = get_frame_rate()

        dur = 1/frame_rate
    CodeComponent debug_code
      Code Type = Both
      Begin JS Experiment:
        console.log(Math.tan(10))
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  Routine Stim1_display_prac
    CodeComponent code_9
      Code Type = Auto->JS
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      Begin Experiment:
        # Init Response Summary

        sim0 = 0;
        sim1 = 0;
        sim2 = 0;
        sim3 = 0;
        sim4 = 0;
        sim5 = 0;
        sim6 = 0;
        sim7 = 0
      End Routine:
        #thisExp.addData("Ecc", Ecc);
        #thisExp.addData("soa_frames", soa_frames);
        thisExp.addData("mask_frames", mask_frames);
        thisExp.addData("face_frames", face_frames);
        #thisExp.addData("soa_duration", soa_duration);
        thisExp.addData("mask_duration", mask_duration);
        thisExp.addData("face_duration", face_duration);
    PolygonComponent centre_cross4_2
      disabled = True
      fillColor = $[1,1,1]
      lineWidth = 1.5
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0
      stopVal [time (s)] = $mask_dur
      units = height
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    TextComponent centre_cross
      letterHeight = 0.04
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.5
      text = +
      units = height
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    ImageComponent forward_mask_2
      image [set every repeat] = $mask
      pos [set every repeat] = $(circle1posx,circle1posy)
      size [set every repeat] = $(circlesizew,circlesizeh*ratio_hw)
      startVal [frame N] = 0
      stopVal [duration (frames)] = $mask_frames
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    ImageComponent face1_prac
      image [set every repeat] = $face1
      pos [set every repeat] = $(circle1posx,circle1posy)
      size [set every repeat] = $(circlesizew,circlesizeh*ratio_hw)
      startVal [frame N] = $mask_frames
      stopVal [duration (frames)] = $face_frames
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    ImageComponent backward_mask_2
      image [set every repeat] = $mask
      pos [set every repeat] = $(circle1posx,circle1posy)
      size [set every repeat] = $(circlesizew,circlesizeh*ratio_hw)
      startVal [frame N] = $face_frames + mask_frames
      stopVal [duration (frames)] = $mask_frames
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  Routine response_prac
    MouseComponent mouse_5
      clickable = response1disk_5,response3disk_5,response5disk_5,response7disk_5,
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0
      syncScreenRefresh = True
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Experiment:
        # Set response size
        a = (screen.size[0]/2)*0.10;
        b = (screen.size[0]/2)*0.158
      Begin Routine:
        event.clearEvents()

        # Count trial numbers

        pracnumber =  pracnumber + 1;
      Each Frame:
        # Similarity for feedback
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d


        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            similarity = 7
            responsenumber = 7
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            similarity = 6
            responsenumber = 6
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            similarity = 5
            responsenumber = 5
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            similarity = 4
            responsenumber = 4
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            similarity = 3
            responsenumber = 3
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            similarity = 2
            responsenumber = 2
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            similarity = 1
            responsenumber = 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            similarity = 0
            responsenumber = 0
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a-b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d


        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            similarity = 7
            sim7 = sim7 + 1
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            similarity = 6
            sim6 = sim6 + 1
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            similarity = 5
            sim5 = sim5 + 1
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            similarity = 4
            sim4 = sim4 + 1
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            similarity = 3
            sim3 = sim3 + 1
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            similarity = 2
            sim2 = sim2 + 1
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            similarity = 1
            sim1 = sim1 + 1
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            similarity = 0
            sim0 = sim0 + 1


        thisExp.addData("similarity", similarity);
        thisExp.addData("response_time", mouse_5.mouseClock.getTime())  # Save time relative to start of mouse
        thisExp.addData("sim0", sim0);
        thisExp.addData("sim1", sim1);
        thisExp.addData("sim2", sim2);
        thisExp.addData("sim3", sim3);
        thisExp.addData("sim4", sim4);
        thisExp.addData("sim5", sim5);
        thisExp.addData("sim6", sim6);
        thisExp.addData("sim7", sim7);
    ImageComponent response1disk_5
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_5
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_5
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_5
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent face2_prac
      image [set every repeat] = $face2
      pos [set every repeat] = (0, 0)
      size [set every repeat] = (15*ratio_pxpermm, 15*ratio_pxpermm*ratio_hw)
      startVal [time (s)] = 0.0
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    TextComponent text_29
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      units = norm
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      text:
        Please choose the similarity level of the face with the previously cued face.
        Please click and hold to indicate your choice.
        0 => Most similar
        7 => Most different
    CodeComponent restore_mouse2
      Code Type = Auto->JS
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  Routine catch_prac
    MouseComponent mouse_7
      clickable = response1disk_7,response3disk_7,response5disk_7,response7disk_7
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    ImageComponent response1disk_7
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_7
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_7
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_7
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Experiment:
        # Set up catch trials

        catchtrialorderprac = []
        for i in range(0,2):
            n = randint(0,7)
            catchtrialorderprac.append(n)

        catchnumberprac = randint(0,7);
      Begin Routine:
        # Select random number for catch trial



        catchtext = f'SPECIAL TRIAL PLEASE JUST CLICK AND HOLD {catchnumberprac}'

        event.clearEvents()
      Each Frame:
        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
      End Routine:
        # Save similarity rating
        mousexpos=mouse.getPos()[0]  # get x position of mouse
        mouseypos=mouse.getPos()[1]  # get y position of mouse

        # Triangle 7
        x11d = a - b/2;
        y11d = a + b/2;
        x12d = a + b/2;
        y12d = a + b/2;
        x13d = a - b/2;
        y13d = a - b/2;
        a1d = ((y12d - y13d)*(mousexpos - x13d) + (x13d - x12d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        b1d = ((y13d - y11d)*(mousexpos - x13d) + (x11d - x13d)*(mouseypos - y13d)) / ((y12d - y13d)*(x11d - x13d)+(x13d - x12d)*(y11d - y13d))
        c1d = 1 - a1d - b1d;

        # Triangle 6
        x21d = a - b/2;
        y21d = a - b/2
        x22d = a + b/2
        y22d = a + b/2
        x23d = a + b/2
        y23d = a - b/2
        a2d = ((y22d - y23d)*(mousexpos - x23d) + (x23d - x22d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        b2d = ((y23d - y21d)*(mousexpos - x23d) + (x21d - x23d)*(mouseypos - y23d)) / ((y22d - y23d)*(x21d - x23d)+(x23d - x22d)*(y21d - y23d))
        c2d = 1 - a2d - b2d

        # Triangle 5
        x31d = a - b/2
        y31d = -(a - b/2)
        x32d = a + b/2
        y32d = -(a - b/2)
        x33d = a + b/2
        y33d = -(a + b/2)
        a3d = ((y32d - y33d)*(mousexpos - x33d) + (x33d - x32d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        b3d = ((y33d - y31d)*(mousexpos - x33d) + (x31d - x33d)*(mouseypos - y33d)) / ((y32d - y33d)*(x31d - x33d)+(x33d - x32d)*(y31d - y33d))
        c3d = 1 - a3d - b3d


        # Triangle 4
        x41d = a - b/2
        y41d = -(a - b/2)
        x42d = a + b/2
        y42d = -(a + b/2)
        x43d = a - b/2
        y43d = -(a + b/2)
        a4d = ((y42d - y43d)*(mousexpos - x43d) + (x43d - x42d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        b4d = ((y43d - y41d)*(mousexpos - x43d) + (x41d - x43d)*(mouseypos - y43d)) / ((y42d - y43d)*(x41d - x43d)+(x43d - x42d)*(y41d - y43d))
        c4d = 1 - a4d - b4d

        #  Triangle 3
        x51d = -(a + b/2)
        y51d = -(a + b/2)
        x52d = -(a - b/2)
        y52d = -(a - b/2)
        x53d = -(a - b/2)
        y53d = -(a + b/2)
        a5d = ((y52d - y53d)*(mousexpos - x53d) + (x53d - x52d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        b5d = ((y53d - y51d)*(mousexpos - x53d) + (x51d - x53d)*(mouseypos - y53d)) / ((y52d - y53d)*(x51d - x53d)+(x53d - x52d)*(y51d - y53d))
        c5d = 1 - a5d - b5d

        # Triangle 2
        x61d = -(a+b/2)
        y61d = -(a+b/2)
        x62d = -(a-b/2)
        y62d = -(a-b/2)
        x63d = -(a+b/2)
        y63d = - (a+b/2)
        a6d = ((y62d - y63d)*(mousexpos - x63d) + (x63d - x62d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        b6d = ((y63d - y61d)*(mousexpos - x63d) + (x61d - x63d)*(mouseypos - y63d)) / ((y62d - y63d)*(x61d - x63d)+(x63d - x62d)*(y61d - y63d))
        c6d = 1 - a6d - b6d

        # Triangle 1

        x71d = -(a + b/2)
        y71d = a + b/2
        x72d = -(a - b/2)
        y72d = a - b/2
        x73d = -(a + b/2)
        y73d = a - b/2
        a7d = ((y72d - y73d)*(mousexpos - x73d) + (x73d - x72d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        b7d = ((y73d - y71d)*(mousexpos - x73d) + (x71d - x73d)*(mouseypos - y73d)) / ((y72d - y73d)*(x71d - x73d)+(x73d - x72d)*(y71d - y73d))
        c7d = 1 - a7d - b7d


        # Triangle 0
        x81d = -(a + b/2)
        y81d = a + b/2
        x82d = -(a - b/2)
        y82d = a + b/2
        x83d = -(a - b/2)
        y83d = a - b/2
        a8d = ((y82d - y83d)*(mousexpos - x83d) + (x83d - x82d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        b8d = ((y83d - y81d)*(mousexpos - x83d) + (x81d - x83d)*(mouseypos - y83d)) / ((y82d - y83d)*(x81d - x83d)+(x83d - x82d)*(y81d - y83d))
        c8d = 1 - a8d - b8d

        if (0 <= a1d <= 1) and (0 <= b1d <= 1) and (0 <= c1d <= 1):
            catchprac = 7
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a2d <= 1) and (0 <= b2d <= 1) and (0 <= c2d <= 1):
            catchprac = 6
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a3d <= 1) and (0 <= b3d <= 1) and (0 <= c3d <= 1):
            catchprac = 5
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a4d <= 1) and (0 <= b4d <= 1) and (0 <= c4d <= 1):
            catchprac = 4
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a5d <= 1) and (0 <= b5d <= 1) and (0 <= c5d <= 1):
            catchprac = 3
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a6d <= 1) and (0 <= b6d <= 1) and (0 <= c6d <= 1):
            catchprac = 2
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a7d <= 1) and (0 <= b7d <= 1) and (0 <= c7d <= 1):
            catchprac = 1;
            thisExp.addData("catchprac", catchprac);
        elif (0 <= a8d <= 1) and (0 <= b8d <= 1) and (0 <= c8d <= 1):
            catchprac = 0;
            thisExp.addData("catchprac", catchprac);



        thisExp.addData("catchnumberprac", catchnumberprac);
    TextComponent text_32
      color = black
      letterHeight = 0.05
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $catchtext
      units = norm
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    PolygonComponent rectangle_5
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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  Routine special_trial
    TextComponent fixation_cross_3
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = height
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    TextComponent text_33
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.5
      text = SPECIAL TRIAL
      units = norm
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    CodeComponent check_catch
      Code Type = Auto->JS
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      Each Frame:
        if myCounter not in catch_trials_list:
            continueRoutine = False
    CodeComponent beth_catch
      Code Type = Auto->JS
      disabled = True
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      Each Frame:
        if myCounter not in catch_trials_list:
            continueRoutine = False
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  Routine summary2_prac
    MouseComponent mouse_6
      clickable = rectangle_4
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    ImageComponent response1disk_6
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_6
      image = response45.png
      pos [set every repeat] = a,-a
      size [set every repeat] = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_6
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_6
      image = response01.png
      pos [set every repeat] = -a,a
      size [set every repeat] = b,b
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent rectangle_4
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Experiment:
        pracnumber = 0;
      Begin Routine:
        pracnumbertext = f'You have finished {pracnumber} of 7 practice questions';

        event.clearEvents()

        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
      Each Frame:
        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
    TextComponent text_30
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text = Please click and hold the grey rectangle in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    TextComponent text_31
      color = black
      letterHeight = 0.05
      pos = (0, -0.8)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pracnumbertext
      units = norm
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  Routine special_trial_prac
    TextComponent fixation_cross_2
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = height
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    TextComponent text_36
      letterHeight = 0.1
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 0.250
      text = SPECIAL TRIAL
      units = norm
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    CodeComponent code_15
      Code Type = Auto->JS
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      Each Frame:
        # Run catch trials
        if not ((pracnumber == catchtrialorderprac[0]) or (pracnumber == catchtrialorderprac[1])):
            continueRoutine=False
  Routine screen_scale
    ImageComponent ccimage
      image = card.png
      pos = (-150,150)
      size [set every repeat] = $(x_size*x_scale, x_size*x_scale*0.62)
      startVal [time (s)] = 0.0
      units = pix
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    CodeComponent code_JS
      Code Type = Both
      Begin JS Experiment:
        // Functions needed for Javascript

        event=psychoJS.eventManager;
        thisExp=psychoJS.experiment;
        win=psychoJS.window;

        //round = function (a) {
        //    return Math.round(a);
        //}
    CodeComponent code_16
      Code Type = Auto->JS
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      Begin Experiment:
        # Set size of card

        oldt=0
        x_size=8.560
        y_size=5.398


        if ccimage.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif ccimage.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'return' in keys:
                continueRoutine=False
            elif 'j' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'k' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            ccimage.size=[x_size*x_scale, x_size*x_scale*0.62]


        ratio_pxpermm = ((x_scale*x_size)/85.6)
      End Routine:
        #Calculate ratio of pixels to mm
        ratio_pxpermm = ((x_scale*x_size)/85.6)

        thisExp.addData('X Scale',x_scale)
        thisExp.addData('ratio_pxpermm',ratio_pxpermm)

        screen_size_x = (1 / ratio_pxpermm) * (win.size[0]);
        screen_size_y = (1 / ratio_pxpermm) * (win.size[1]);

        thisExp.addData('screen_size_x',screen_size_x)
        thisExp.addData('screen_size_y',screen_size_y)


        # Calculate Monitor in

        h_cm = screen_size_y / 10
        w_cm = screen_size_x / 10

        diagonal_cm = sqrt(h_cm**2 + w_cm**2)
        diagonal_in = diagonal_cm * 0.3937

        print(diagonal_cm)
        print(diagonal_in)
    TextComponent text_37
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.35)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        First, we need to determine the size of your screen.
        Take a credit card (or a drivers license, library card, any equivalent card),
        press it to the screen and adjust the image on your screen to be the same size as the card

        To increase the image width: press 'k' on your keyboard
        To decrease the image width: press 'j' on your keyboard

        When you are done, press <ENTER>
  Routine ball_calibration
    PolygonComponent black_square2
      fillColor = black
      lineColor = black
      lineWidth = 1.5
      pos [set every frame] = (((window.innerWidth/2)*0.8),0)
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent white_ball
      fillColor = white
      nVertices = 1000
      pos [set every frame] = [((-frameN*((window.innerWidth/2)*0.003))+ballpos), 0]
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      stopVal [frame N] = 800
      units = pix
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    KeyboardComponent key_resp_19
      allowedKeys = 'return'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Experiment:
        # Store each calibration
        viewerdistancetotal = []
        # Count calibrations
        calibrationcount = 0
      Begin Routine:
        # Blindspot angle
        blindspot_angle = 13.5
        ballpos = (window.innerWidth/2)*0.75;
        # Convert radians to degrees
        radians_to_degrees = 57.2958
        calibrationcountext=f'{calibrationcount} of 5 angle calibrations complete'
      End Routine:
        # Final x position of white ball
        currentframe = frameN
        if currentframe < 800:
            ballposx = white_ball.pos[0]

        if currentframe >= 800:
            ballposx = white_ball1_2.pos[0]

        # X position of black square
        squarepos = black_square2.pos[0]
        # Calulcate the distance from the screen for this calibration
        viewer_distance =  (((squarepos - ballposx))/ratio_pxpermm)/tan(blindspot_angle/radians_to_degrees)
        # Store the distance in a list
        viewerdistancetotal.append(viewer_distance);
        # Calibration count
        calibrationcount = calibrationcount + 1;

        thisExp.addData("ballposx", ballposx)
        thisExp.addData("viewer_distance", viewer_distance)
    TextComponent text_39
      letterHeight = 0.06
      pos = (0, -0.6)
      startVal [time (s)] = 0.0
      text [set every repeat] = $calibrationcountext
      units = norm
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    PolygonComponent white_ball1_2
      fillColor = white
      nVertices = 1000
      pos [set every frame] = [(((-frameN+800)*((window.innerWidth/2)*0.003))+ballpos), 0]
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [frame N] = 800
      units = pix
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
  Routine instr_2
    MovieComponent movie
      backend = moviepy
      forceEndRoutine = True
      loop = True
      movie [set every repeat] = calibrationinsrt.mp4
      pos = (0, 0.4)
      size [set every repeat] = (0.38,0.35)
      startVal [time (s)] = 0
      units = norm
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    TextComponent text
      color = yellow
      letterHeight = 0.06
      pos = (0,-0.2)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        Next, we need to get you to keep your head a fixed distance from the screen.
        This will ensure future images are the right size for your screen. On the next screen please:
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_3
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        1. Keeping your arm straight, please touch your thumb to the centre of the screen in the oval
        2. While keeping your head in the same position, lower your arm.
        3. Please keep your head in this position for the remainder of the experiment
    TextComponent space_3
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 0.0
      text = Press SPACE to continue 
      units = norm
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  Routine instr_3
    TextComponent text_4
      color = yellow
      letterHeight = 0.07
      pos = (0, 0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        1. While keeping your arm straight touch your thumb to the centre of the screen in the oval.
        2. Keep your head in the same position, but lower and relax your arm.
        3. Please keep your head in this position for the remainder of the experiment.
        4. Press SPACE to continue
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Experiment:
        thumb_size = 20;
      Begin Routine:
        # Calculate line size from ratio
        line_size = thumb_size * ratio_pxpermm
      End Routine:
        thisExp.addData("line_size", line_size);
    ImageComponent calibrationline
      image = calibrationline.png
      size [set every repeat] = $(line_size, line_size*3)
      startVal [time (s)] = 0.0
      units = pix
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  Routine instr_4
    TextComponent text_5
      color = yellow
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Lastly, we need to know how far your head is from the screen.
        Please keep your head in the same position as before.

        Over the next few pages we will explain how we can work out how far you are sitting from the screen.
        Please pay attention and follow all the instructions carefully.

        These first few pages will be INSTRUCTIONS ONLY. You will be instructed when the calibrations start.

        When ready, press SPACE to continue and follow the instructions on the next page.
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_4
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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  Routine instr_5
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_5
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
      wrapWidth = 10000
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    TextComponent text_6
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = 1. Put a finger on <ENTER> on the keyboard.
      units = norm
      wrapWidth = 1000
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  Routine instr_6
    KeyboardComponent key_resp_8
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_7
      color = yellow
      letterHeight = 0.05
      pos = (0.7,-0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_3
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
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    TextComponent text_8
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = 2. Close your right eye
      units = norm
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  Routine viewerdistance
    CodeComponent code_19
      Code Type = Both
      Begin Experiment:
        #peripheral_scale = 4.5 #scaling factor for peripheral stimuli, chosen based on Freeman & Simoncelli 2011 fig 1.
        peripheral_scale = 3.72 #scaling factor peripheral stimuli
        radius_central = 1.5 # arbitrarily chosen 1 DVA
        radius_peripheral = 10
        stimulus_size = 1 # arbitarily chosen 1 DVA
        response_stim_scale = 2
        distance_threshold = 300
        screen_x_threshold = 230
      Begin JS Experiment:
        peripheral_scale = 3.72;
        radius_central = 1.5;
        radius_peripheral = 10;
        stimulus_size = 1;
        response_stim_scale = 2;
        distance_threshold = 300;
        screen_x_threshold = 230;
      Begin JS Routine:
        // Find median of viewer distance
        viewerdistancecmSort = viewerdistancetotal.sort();
        len = 5;
        mid = Math.ceil(len/2)
        viewerdistancemm =
           len % 2 == 0 ? (viewerdistancecmSort[mid] + viewerdistancecmSort[mid - 1]) / 2 : viewerdistancecmSort[mid - 1];

        viewerdistancecm = Math.round((viewerdistancemm / 10), 3);
        viewdistancetext = `Your viewing distance is ${viewerdistancecm} cm`;
        DVA_to_distance = ((viewerdistancecm * tan((1 / radians_to_degrees))) * 10);
        radius_F = ((DVA_to_distance * ratio_pxpermm) * radius_central);
        radius_P = ((DVA_to_distance * ratio_pxpermm) * radius_peripheral);
        r_F = ((DVA_to_distance * ratio_pxpermm) * stimulus_size);
        R_P = (peripheral_scale * r_F);
      Begin Routine:
        viewerdistancecm = round((sum(viewerdistancetotal)/50),3)
        viewdistancetext=f'Your viewing distance is {viewerdistancecm} cm'


        DVA_to_distance = (viewerdistancecm *tan(1/radians_to_degrees))*10;
        radius_F = DVA_to_distance * ratio_pxpermm * radius_central;
        radius_P =  DVA_to_distance * ratio_pxpermm * radius_peripheral;
        r_F =  DVA_to_distance * ratio_pxpermm * stimulus_size;
        R_P =  peripheral_scale * r_F;
      Each Frame:
        if viewerdistancecm*10 < distance_threshold:
            continueRoutine = False

        if screen_size_x < screen_x_threshold:
                continueRoutine = False
      Each JS Frame:
        if (((viewerdistancecm * 10) < distance_threshold)) {
            continueRoutine = false;
        }
        if ((screen_size_x < screen_x_threshold)) {
            continueRoutine = false;
        }
      End JS Routine:
        thisExp.addData("viewerdistancecm", viewerdistancecm);
        thisExp.addData("DVA_to_distance", DVA_to_distance);
        thisExp.addData("radius_F", radius_F);
        thisExp.addData("radius_P", radius_P);
        thisExp.addData("r_F", r_F);
        thisExp.addData("R_P", R_P);
      End Routine:
        thisExp.addData("viewerdistancecm", viewerdistancecm)
        thisExp.addData("DVA_to_distance", DVA_to_distance)
        thisExp.addData("radius_F", radius_F)
        thisExp.addData("radius_P", radius_P)
        thisExp.addData("r_F", r_F)
        thisExp.addData("R_P", R_P)
    TextComponent text_38
      color = yellow
      letterHeight = 0.08
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      text [set every repeat] = $viewdistancetext
      units = norm
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    TextComponent text_40
      color = yellow
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text = The calibrations were successful!
      units = norm
      wrapWidth = 10000
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent space_20
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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  Routine viewerdistance_unsucess
    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        viewerdistancecm = round((sum(viewerdistancetotal)/50),3)
        viewdistancetext=f'Your viewing distance is calculated as {viewerdistancecm} cm'
      Each Frame:
        if viewerdistancecm*10 > distance_threshold and screen_size_x > screen_x_threshold:
            continueRoutine = False
    TextComponent text_41
      letterHeight = 0.08
      pos = (0, 0.100)
      startVal [time (s)] = 0.0
      text = Unfortunately the calibrations were unsuccessful.
      units = norm
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    TextComponent text_42
      color = red
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      text [set every repeat] = $viewdistancetext
      units = norm
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    TextComponent text_43
      color = red
      letterHeight = 0.08
      pos = (0, -0.100)
      startVal [time (s)] = 0.0
      text = Please exit the experiment
      units = norm
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  Routine instr_8
    KeyboardComponent key_resp_12
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_11
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_5
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
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    TextComponent text_13
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        4. Without moving your head or face, use your left eye to focus on the black square.
        Keep your right eye closed and do not move your head.
    PolygonComponent center_cross_3
      fillColor = $[1,1,1]
      lineWidth = 0.8
      shape = cross
      size = (0.05, 0.05)
      startVal [time (s)] = 0.0
      units = norm
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    PolygonComponent black_square
      fillColor = black
      lineColor = black
      lineWidth = 1.5
      pos = (500,0)
      shape = regular polygon...
      size [set every repeat] = (8.5*ratio_pxpermm, 8.5*ratio_pxpermm)
      startVal [time (s)] = 0.0
      units = pix
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    TextComponent text_14
      color = black
      letterHeight = 0.03
      pos = (0.75, 0.08)
      startVal [time (s)] = 0.0
      text = Stare at the square
      units = norm
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  Routine instr_prac
    TextComponent space_10
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent text_10
      color = yellow
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        You are going to do a few practice trials to make you be more familiar with the experiment.
        When you are ready, please press SPACE to start the practice trials
    KeyboardComponent key_resp_10
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instr_10
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_17
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_7
      color = yellow
      letterHeight = 0.1
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
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    TextComponent text_44
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        6. Press the <ENTER> key as soon as the ball disappears properly from your eye sight (not due to running off screen)
        Keep your right eye closed, stare at the black square, do not move your head.
  Routine instr_12
    KeyboardComponent key_resp_13
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_12
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_6
      color = yellow
      letterHeight = 0.07
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        NEXT WILL BE THE ACTUAL CALIBRATION

        Remember to keep your right eye closed, stare at the black square and do not move your head.

        Press the <ENTER> key as soon as the ball disappears from your eye sight (not just due to running off the edge of the screen).

        When ready press SPACE to start viewing the distance calibration.
    TextComponent text_15
      letterHeight = 0.06
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = Warning! It is critical that these calibrations are done correctly or you will be unable to do the experiment and we will be unable to approve your payment!
      units = norm
      wrapWidth = 1.5
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  Routine instr_11
    KeyboardComponent key_resp_21
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_18
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent instr_only_8
      color = yellow
      letterHeight = 0.1
      pos = (0,0.6)
      startVal [time (s)] = 0.0
      text = INSTRUCTIONS ONLY
      units = norm
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    TextComponent text_45
      color = yellow
      letterHeight = 0.06
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        7. The next page will show you a demonstration of the calibration task for a few seconds.
        During the actual calibration, you will need to press <ENTER> when the ball disappears.

        You will do this five times so we can make sure we get the right distance.
        The ball will reset each time.

        Keep your right eye closed, stare at the black square and do not move your head.
  Routine begin
    TextComponent space_19
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent text_46
      color = yellow
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1000
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      text:
        You have finished the practice trial.

        Next page will be the formal test.

        If you are ready, please press SPACE button to start the experiment.
    KeyboardComponent key_resp_22
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent re_init_sim
      Code Type = Auto->JS
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      Begin Experiment:
        # Init trial counter
        myCounter = -1

        # Init vector of sumresp trials
        sumresp_trials = [5,40,80,120,160,200,240]
        print("sumresp_trials is", sumresp_trials)

        # Init Catch trials
        catch_trials_list = randomArray(20, 255)
        print("catch trials list is", catch_trials_list)
      Begin Routine:
        # Init Response Summary

        sim0 = 0
        sim1 = 0
        sim2 = 0
        sim3 = 0
        sim4 = 0
        sim5 = 0
        sim6 = 0
        sim7 = 0
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  Routine summary_prac
    MouseComponent mouse_10
      clickable = rectangle_8
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
      syncScreenRefresh = True
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    ImageComponent response1disk_10
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response3disk_10
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response5disk_10
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    ImageComponent response7disk_10
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
      units = pix
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    PolygonComponent rectangle_8
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.1, 0.08)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Experiment:
        pracnumber = 0;
      Begin Routine:
        pracnumbertext = f'You have finished {pracnumber} of 7 practice questions';

        event.clearEvents()
    TextComponent text_49
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Please click and hold on the grey rectangle in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    TextComponent text_50
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $pracnumbertext
      units = norm
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  Routine response_sum
    MouseComponent mouse_11
      clickable = rectangle
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    ImageComponent response1disk_11
      image = response67.png
      pos = a,a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response3disk_11
      image = response45.png
      pos = a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response5disk_11
      image = response23.png
      pos = -a,-a
      size = b,b
      startVal [time (s)] = 0.0
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    ImageComponent response7disk_11
      image = response01.png
      pos = -a,a
      size = b,b
      startVal [time (s)] = 0.0
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    PolygonComponent rectangle_9
      fillColor [set every repeat] = $grey
      nVertices = 1000
      shape = rectangle
      size = (0.100, 0.080)
      startVal [time (s)] = 0.0
      units = norm
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    CodeComponent code_24
      Code Type = Auto->JS
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      Begin Experiment:
        trialnumber = 0;
      Begin Routine:
        trialnumbertext = f'You have finished {trialnumber} of 256 questions';
        event.clearEvents()
      Each Frame:
        if myCounter not in catch_trials_list:
            continueRoutine = False
    TextComponent text_51
      color = black
      letterHeight = 0.05
      pos = (0, -0.5)
      startVal [time (s)] = 0.0
      text = Please click and hold the grey rectangle in the middle of the response numbers to continue
      units = norm
      wrapWidth = 1000
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    TextComponent text_52
      color = black
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 0.0
      text [set every repeat] = $trialnumbertext
      units = norm
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  Routine consent
    CodeComponent code_17
      Code Type = Auto->JS
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      Begin Routine:
        posx = ((window.innerWidth / 2) * 0.85);
        posy = ((window.innerWidth / 2) * 0.85);
    TextComponent text_53
      font = Times New Roman
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Precision Phenomenology Experiment
        Just a little bit more to read before the experiment...this is an Informed Consent Form. Please read and understand the statements below.

        I understand that my taking part in the study is voluntary and that I am free to leave the study at any time, without giving any reason. I understand that my medical care or legal rights will not be affected in any way.
        I agree to the use and release of study-related information about me for the purposes described in this Informed Consent Form.
        I agree to the re-use of data collected in this study for future studies in a de-identified manner as described in this Informed Consent form.
        I understand that my consent continues until and unless I withdraw my consent that can be done at any time by giving notice to the investigator. I understand that if I withdraw my consent I will not be able to continue to take part in the study.
        I understand that if I withdraw consent, the study researchers will no longer use or release information that identifies me in connection with the study unless it is needed to keep the scientific quality of the study. I understand that if I withdraw consent the study researchers may still use any study-related information about me that was collected before I withdrew consent.
        I have read and I understand the information provided in this Informed Consent Form. I have had the opportunity to ask questions and have had these questions answered satisfactorily.
        I have had time to consider the information provided in this Informed Consent Form to consider answers to my questions, and to consider whether I wish to take part in the study.
        If you understand the statements above, and freely consent to participate in the study, press [Space] to begin the experiment.
    KeyboardComponent key_resp_16
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ImageComponent image
      image = monash-logo-mono.png
      pos [set every repeat] = (-posx, posy)
      size = 150,75
      startVal [time (s)] = 0.0
      units = pix
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  Routine survey1
    TextComponent copyText_1
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_4
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin Routine:
        textFill_5 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_1 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_1 = textFill_1[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_1 += '.'
                elif keys[0] in allLetters:
                    textFill_1+=keys[0]  # Adds character to text if in alphabet.
                copyText_1.setText(textFill_1)  # Set new text on screen
      End Routine:
        thisExp.addData('answer1', textFill_1)
        thisExp.nextEntry()
    TextComponent question_4
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        Please answer the next 7 questions to finish the experiment. Please type your reponse and press <ENTER> to submit,

        1. Has the rapid visual presentation compromised your ability in seeing faces? (y or n)
    TextComponent submitanswer
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey2
    TextComponent copyText_2
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin Routine:
        textFill_2 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_2 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_2 = textFill_2[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_2 += '.'
                elif keys[0] in allLetters:
                    textFill_2+=keys[0]  # Adds character to text if in alphabet.
                copyText_2.setText(textFill_2)  # Set new text on screen
      End Routine:
        thisExp.addData('answer2', textFill_2)
        thisExp.nextEntry()
    TextComponent question
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      text = 2. Did you have any difficulty in seeing the centrally presented faces? (y or n)
      units = norm
      wrapWidth = 1.5
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    TextComponent submitanswer_2
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey_4
    TextComponent copyText_4
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_3
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin Routine:
        textFill_4 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_4 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_4 = textFill_4[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_4 += '.'
                elif keys[0] in allLetters:
                    textFill_4+=keys[0]  # Adds character to text if in alphabet.
                copyText_4.setText(textFill_4)  # Set new text on screen
      End Routine:
        thisExp.addData('answer4', textFill_4)
        thisExp.nextEntry()
    TextComponent question_3
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      text = 4. Do you have normal visual acuity, or corrected-to-normal wearing glasses or contact lenses? (y or n)
      units = norm
      wrapWidth = 1.5
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    TextComponent submitanswer_4
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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
  Routine survey6
    TextComponent copyText_6
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_6
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin Routine:
        textFill_6 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_6 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_6 = textFill_6[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_6 += '.'
                elif keys[0] in allLetters:
                    textFill_6+=keys[0]  # Adds character to text if in alphabet.
                copyText_6.setText(textFill_6)  # Set new text on screen
      End Routine:
        thisExp.addData('answer6', textFill_6)
        thisExp.nextEntry()
    TextComponent question_6
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        5. Did you base your similarity ratings on any of the following strategies?
        - faces gender (e.g 'male' or 'female')
        - face details (e.g 'hair', 'shades', 'surfaces')
        - face shapes (e.g. 'cheeks', 'jawline', 'forehead')
        - overall face impression
        - no particular strategy

        Please type which strategy, and if you selected 'another strategy' please describe it.
    TextComponent submitanswer_6
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine survey7
    TextComponent copyText_7
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_7
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin Routine:
        textFill_7 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_7 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_7 = textFill_7[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_7 += '.'
                elif keys[0] in allLetters:
                    textFill_7+=keys[0]  # Adds character to text if in alphabet.
                copyText_7.setText(textFill_7)  # Set new text on screen
      End Routine:
        thisExp.addData('answer7', textFill_7)
        thisExp.nextEntry()
    TextComponent question_7
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        Please type any other comments you may have.

        You have now finished the experiment. Thank you for your participation!
    TextComponent submitanswer_7
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine responseprac_feedback
    CodeComponent code_25
      Code Type = Auto->JS
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      Begin Routine:
        if 0 <= responsenumber <= 1:
            responsefeedback = f'You selected {responsenumber}'
            responsefeedback1 = f'{responsenumber} indicates you found the faces very similar';

        if 2 <= responsenumber <= 3:
            responsefeedback = f'You selected {responsenumber}'
            responsefeedback1 = f'{responsenumber} indicates you found the faces similar';


        if 4 <= responsenumber  <= 5:
            responsefeedback = f'You selected {responsenumber}' ;
            responsefeedback1 = f'{responsenumber} indicates you found the faces different';

        if 6 <= responsenumber  <= 7:
            responsefeedback = f'You selected {responsenumber}' ;
            responsefeedback1 = f'{responsenumber} indicates you found the faces very different';
      Each Frame:
        if 0 <= responsenumber <= 3:
            responsefeedback = f'You selected {responsenumber} indicating you found the colours are similar';


        if 4 <= responsenumber  <= 7:
            responsefeedback = f'You selected {responsenumber} indicating you found the colours are dissimilar';
    TextComponent text_55
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $responsefeedback
      units = norm
      wrapWidth = 1000
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    TextComponent text_56
      letterHeight = 0.1
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 4
      text [set every repeat] = $responsefeedback1
      units = norm
      wrapWidth = 1000
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  Routine fixation
    TextComponent fixation_cross
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = height
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    CodeComponent hide_mouse
      Code Type = Auto->JS
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    CodeComponent init_stimuli
      Code Type = Auto->JS
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      Begin Routine:
        # Count Trials
        myCounter += 1
        print("trial number", myCounter)

        # Init Mask

        mask_number = randint(1,17)
        mask_number = str(mask_number)
        mask = "face/mask_" + mask_number + ".png"

        # Init Catchtrial

        if myCounter in catch_trials_list:
            # Select random number for catch trial
            #catchnumber = randint(0,7);
            catchnumber = 2
            catchtext = f'SPECIAL TRIAL PLEASE CLICK AND HOLD {catchnumber}'
            iscatch = 1
        else:
            catchnumber = NaN
            catchresponse = NaN
            iscatch = 0

        print("the mask is ", mask)

        # Circle position and size

        # Set up angle placement
        #angle_1 = randint(-30,30);
        angle_1 = 0;
        angle_2 = angle_1 + 180;
        angle_3 = angle_1 + 0;

        x = 1
        y = 1

        theta_1 = (angle_1)*(pi/180)
        theta_2 = (angle_2)*(pi/180)
        theta_3 = (angle_3)*(pi/180)

        deltax_1 = radius_F*cos(theta_1)
        deltay_1 = radius_F*sin(theta_1)
        deltax_2 = radius_P*cos(theta_2)
        deltay_2 = radius_P*sin(theta_2)
        deltax_3 = radius_P*cos(theta_3)
        deltay_3 = radius_P*sin(theta_3)


        a_1 = x + deltax_1
        b_1 = y + deltay_1
        a_2 = x + deltax_2
        b_2 = y + deltay_2
        a_3 = x + deltax_3
        b_3 = y + deltay_3

        # Set circle position
        if Ecc == 'LPF':
                circle1posx = a_2;
                circle1posy = b_2;
                circlesizeh = 2 * R_P;
                circlesizew = 2 * R_P;
        elif Ecc == 'RPF':
                circle1posx = a_3;
                circle1posy = b_3;
                circlesizeh = 2 * R_P;
                circlesizew = 2 * R_P;


        # Set duration

        face_frames = closest_frames(face_dur, dur) # nearest frame
        #soa_frames = closest_frames(soa, dur) # nearest frame
        mask_frames = closest_frames(mask_dur, dur) # nearest frame

        face_duration = face_frames*dur # duration in s
        #soa_duration = soa_frames*dur  # duration in s
        mask_duration = mask_frames*dur # duration in s

        #print(face_frames)
        #print(soa_frames)
        #print(mask_frames)

        print("Visual field is", Ecc)
      End Routine:
        thisExp.addData("mask", mask);
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  Routine sum_resp_prac
    TextComponent text_result
      color = yellow
      letterHeight = 0.04
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      text [set every repeat] = <init>
      units = height
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    CodeComponent code_13
      Code Type = Auto->JS
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    KeyboardComponent key_resp_25
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_63
      color = yellow
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 1
      text = Press spacebar to continue
      units = height
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  Routine face_instr
    KeyboardComponent key_resp_30
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 2
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    TextComponent space_16
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
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    TextComponent text_67
      color = yellow
      letterHeight = 0.06
      pos = (0, 0.8)
      startVal [time (s)] = 0.0
      text = During the test, you will see these 16 different faces below
      units = norm
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    ImageComponent ex_faces
      image = example_faces.png
      size = (0.5, 0.8*1.23)
      startVal [time (s)] = 0.0
      units = norm
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
  Routine expl_summary_2
    TextComponent text_65
      color = yellow
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      units = norm
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      text:
        The previous display showed the total of your similarity ratings during the practice.

        This summary will be shown sometimes during the main experiment. Please try to use the entire response scale for the similarity ratings.

        Press the spacebar to continue
    KeyboardComponent key_resp_28
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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
  Routine survey3
    TextComponent copyText_3
      letterHeight = 0.08
      pos = (-0.05, 0.1)
      startVal [time (s)] = 0
      units = norm
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    CodeComponent code_answer_2
      Code Type = Auto->JS
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      Begin Experiment:
        import string
        allLetters = list(string.ascii_lowercase+string.digits)
      Begin Routine:
        textFill_3 = ''
      Each Frame:
        keys = event.getKeys()
        if 'escape' in keys:
            core.quit()  # So you can quit
        else:
            if keys:
                if keys[0] == 'space':
                    textFill_3 += ' '  # Adds a space instead of 'space'
                if keys[0] == 'backspace':
                    textFill_3 = textFill_3[:-1]  # Deletes
                elif keys[0] == 'period':
                    textFill_3 += '.'
                elif keys[0] in allLetters:
                    textFill_3+=keys[0]  # Adds character to text if in alphabet.
                copyText_3.setText(textFill_3)  # Set new text on screen
      End Routine:
        thisExp.addData('answer3', textFill_3)
        thisExp.nextEntry()
    TextComponent question_2
      letterHeight = 0.08
      pos = (0, 0.5)
      startVal [time (s)] = 0
      units = norm
      wrapWidth = 1.5
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      text:
        3. Were there any problems with the position of the faces on the screen?
        (e.g. partially out of screen faces)     (y or n)
    TextComponent submitanswer_3
      letterHeight = 0.08
      pos = (0, -0.9)
      startVal [time (s)] = 0.0
      text = Press enter to submit your answer
      units = norm
      wrapWidth = 3
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  Routine sum_resp_2
    TextComponent text_result_3
      color = yellow
      letterHeight = 0.04
      pos = (0, 0.0)
      startVal [time (s)] = 0.0
      text [set every repeat] = <init>
      units = height
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    CodeComponent code_27
      Code Type = Both
      Begin JS Routine:
        text_result_3.setText(
          'You have used this keys so far:' +
          '\n\n Response 0 = ' + sim0 +
          '\n Response 1 = ' + sim1 +
          '\n Response 2 = ' + sim2 +
          '\n Response 3 = ' + sim3 +
          '\n Response 4 = ' + sim4 +
          '\n Response 5 = ' + sim5 +
          '\n Response 6 = ' + sim6 +
          '\n Response 7 = ' + sim7
        );
      Each Frame:
        if myCounter not in sumresp_trials:
            continueRoutine = false
      Each JS Frame:
        var _pj;
        function _pj_snippets(container) {
            function in_es6(left, right) {
                if (((right instanceof Array) || ((typeof right) === "string"))) {
                    return (right.indexOf(left) > (- 1));
                } else {
                    if (((right instanceof Map) || (right instanceof Set) || (right instanceof WeakMap) || (right instanceof WeakSet))) {
                        return right.has(left);
                    } else {
                        return (left in right);
                    }
                }
            }
            container["in_es6"] = in_es6;
            return container;
        }
        _pj = {};
        _pj_snippets(_pj);
        if ((! _pj.in_es6(myCounter, sumresp_trials))) {
            continueRoutine = false;
        }
    KeyboardComponent key_resp_31
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_68
      color = yellow
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.5
      text = Press spacebar to continue
      units = height
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
  Routine fixation_prac
    TextComponent fixation_cross_4
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = height
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    CodeComponent hide_mouse_2
      Code Type = Auto->JS
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    CodeComponent init_stimuli_2
      Code Type = Auto->JS
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      Begin Routine:
        # Init Mask

        mask_number = randint(1,17)
        mask_number = str(mask_number)
        mask = "face/mask_" + mask_number + ".png"

        # Circle position and size

        # Set up angle placement
        #angle_1 = randint(-30,30);
        angle_1 = 0;
        angle_2 = angle_1 + 180;
        angle_3 = angle_1 + 0;

        x = 1
        y = 1

        theta_1 = (angle_1)*(pi/180)
        theta_2 = (angle_2)*(pi/180)
        theta_3 = (angle_3)*(pi/180)

        deltax_1 = radius_F*cos(theta_1)
        deltay_1 = radius_F*sin(theta_1)
        deltax_2 = radius_P*cos(theta_2)
        deltay_2 = radius_P*sin(theta_2)
        deltax_3 = radius_P*cos(theta_3)
        deltay_3 = radius_P*sin(theta_3)


        a_1 = x + deltax_1
        b_1 = y + deltay_1
        a_2 = x + deltax_2
        b_2 = y + deltay_2
        a_3 = x + deltax_3
        b_3 = y + deltay_3

        # Set circle position
        if Ecc == 'LPF':
                circle1posx = a_2;
                circle1posy = b_2;
                circlesizeh = 2 * R_P;
                circlesizew = 2 * R_P;
        elif Ecc == 'RPF':
                circle1posx = a_3;
                circle1posy = b_3;
                circlesizeh = 2 * R_P;
                circlesizew = 2 * R_P;

        # Set duration

        face_frames = closest_frames(face_dur, dur) # nearest frame
        #soa_frames = closest_frames(soa, dur) # nearest frame
        mask_frames = closest_frames(mask_dur, dur) # nearest frame

        face_duration = face_frames*dur # duration in s
        #soa_duration = soa_frames*dur  # duration in s
        mask_duration = mask_frames*dur # duration in s

        #print(face_frames)
        #print(soa_frames)
        #print(mask_frames)
      End Routine:
        thisExp.addData("mask", mask);
  Routine init_prac
    CodeComponent init_prac_code
      Code Type = Auto->JS
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      Begin Experiment:
        trials_prac = randomArray(7, 255)
        console.log(trials_prac)
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
  Routine fixation_vis
    TextComponent fixation_cross_5
      letterHeight = 0.04
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
      units = height
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    CodeComponent hide_mouse_3
      Code Type = Auto->JS
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    CodeComponent init_stimuli_3
      Code Type = Auto->JS
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      Begin Routine:
        # Init Mask

        mask_number = randint(1,17)
        mask_number = str(mask_number)
        mask = "face/mask_" + mask_number + ".png"

        # Init Stimulus
        stimuli = ["f5", "f6", "f7", "f8", "m5", "m6", "m7", "m8"]
        stim = stimuli[randint(0, 8)]
        vis_stim = "face/" + stim + ".png"

        # Init visual field
        ecc_list = ["LPF", "RPF"]
        Ecc_vis = ecc_list[randint(0,2)]

        # Circle position and size

        # Set up angle placement
        #angle_1 = randint(-30,30);
        angle_1 = 0;
        angle_2 = angle_1 + 180;
        angle_3 = angle_1 + 0;

        x = 1
        y = 1

        theta_1 = (angle_1)*(pi/180)
        theta_2 = (angle_2)*(pi/180)
        theta_3 = (angle_3)*(pi/180)

        deltax_1 = radius_F*cos(theta_1)
        deltay_1 = radius_F*sin(theta_1)
        deltax_2 = radius_P*cos(theta_2)
        deltay_2 = radius_P*sin(theta_2)
        deltax_3 = radius_P*cos(theta_3)
        deltay_3 = radius_P*sin(theta_3)


        a_1 = x + deltax_1
        b_1 = y + deltay_1
        a_2 = x + deltax_2
        b_2 = y + deltay_2
        a_3 = x + deltax_3
        b_3 = y + deltay_3

        # Set circle position
        if Ecc_vis == 'LPF':
                circle1posx = a_2;
                circle1posy = b_2;
                circlesizeh = 2 * R_P;
                circlesizew = 2 * R_P;
        elif Ecc_vis == 'RPF':
                circle1posx = a_3;
                circle1posy = b_3;
                circlesizeh = 2 * R_P;
                circlesizew = 2 * R_P;


        # Set duration

        face_frames = closest_frames(face_dur, dur) # nearest frame
        #soa_frames = closest_frames(soa, dur) # nearest frame
        mask_frames = closest_frames(mask_dur, dur) # nearest frame

        face_duration = face_frames*dur # duration in s
        #soa_duration = soa_frames*dur  # duration in s
        mask_duration = mask_frames*dur # duration in s
      End Routine:
        thisExp.addData("mask", mask)
        thisExp.addData("Ecc_vis", Ecc_vis)
        thisExp.addData("vis_stim", vis_stim)
        thisExp.addData("mask_frames", mask_frames)
        thisExp.addData("face_frames", face_frames)
  Routine target_vis
    TextComponent centre_cross_3
      letterHeight = 0.04
      startVal [time (s)] = 0
      stopVal [time (s)] = 0.5
      text = +
      units = height
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    ImageComponent forward_mask_3
      image [set every repeat] = $mask
      pos [set every repeat] = $(circle1posx,circle1posy)
      size [set every repeat] = $(circlesizew,circlesizeh*ratio_hw)
      startVal [frame N] = 0
      stopVal [duration (frames)] = $mask_frames
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    ImageComponent face1_target_2
      image [set every repeat] = $vis_stim
      pos [set every repeat] = $(circle1posx,circle1posy)
      size [set every repeat] = $(circlesizew,circlesizeh*ratio_hw)
      startVal [frame N] = $mask_frames
      stopVal [duration (frames)] = $face_frames
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    ImageComponent backward_mask_3
      image [set every repeat] = $mask
      pos [set every repeat] = $(circle1posx,circle1posy)
      size [set every repeat] = $(circlesizew,circlesizeh*ratio_hw)
      startVal [frame N] = $face_frames + mask_frames
      stopVal [duration (frames)] = $mask_frames
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  Routine pas
    KeyboardComponent key_resp_32
      allowedKeys = '1', '2', '3', '4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_69
      color = yellow
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        How do you rate your experience of the face?

        1 = No experience of the face
        2 = Weak glimpse of the face
        3 = Almost clear experience of the face
        4 = Absolutely clear experience of the face
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  Routine instr_visibility
    KeyboardComponent key_resp_34
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_71
      color = yellow
      letterHeight = 0.06
      startVal [time (s)] = 0.0
      units = norm
      wrapWidth = 1.5
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      text:
        Before starting the main experiment, you are going to do some trials where you evaluate your experience of face visibility.

        A face will be briefly presented. After you need to use number keys from 1 to 4 in order to rate how much visible was the face.
        Press:

        1 = No experience of the face
        2 = Weak glimpse of the face
        3 = Almost clear experience of the face
        4 = Absolutely clear experience of the face
    TextComponent space_21
      color = yellow
      letterHeight = 0.05
      pos = (0, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to begin
      units = norm
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
  Routine end_visibility_2
    TextComponent debrief_visibility
      color = yellow
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = You have finished the visibility ratings trials. Now you will see the other parts of the instructions for the main task.
      units = norm
      wrapWidth = 1.8
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    TextComponent space_23
      color = yellow
      letterHeight = 0.05
      pos = (0.7, -0.7)
      startVal [time (s)] = 2
      text = Press SPACE to continue 
      units = norm
      wrapWidth = 1000
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    KeyboardComponent key_resp_36
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine startup
  LoopInitiator debug_calibration loopType="TrialHandler"
    loopType = random
    nReps = 0
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    Routine welcome_instr
    Routine consent
    Routine instr_1
    Routine screen_scale
    Routine instr_2
    Routine instr_3
    Routine instr_4
    Routine instr_5
    Routine instr_6
    Routine instr_7
    Routine instr_8
    Routine instr_9
    Routine instr_10
    Routine instr_11
    Routine calibration_example
    Routine instr_12
    LoopInitiator trials loopType="TrialHandler"
      loopType = random
      nReps = 5
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      Routine ball_calibration
    LoopTerminator trials
    Routine viewerdistance
    Routine viewerdistance_unsucess
  LoopTerminator debug_calibration
  Routine stim1_instr
  Routine instr_visibility
  LoopInitiator trials_vis loopType="TrialHandler"
    Selected rows = 0:3
    conditionsFile = face_vis.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'trials': 1, 'mask_cond': 1, 'face_dur': 0.01666666666666667, 'mask_dur': 0.2, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 1, 'mask_cond': 1, 'face_dur': 0.03333333333333333, 'mask_dur': 0.2, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 1, 'mask_cond': 1, 'face_dur': 0.05, 'mask_dur': 0.2, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 1, 'mask_cond': 0, 'face_dur': 0.01666666666666667, 'mask_dur': 0, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 1, 'mask_cond': 0, 'face_dur': 0.03333333333333333, 'mask_dur': 0, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 1, 'mask_cond': 0, 'face_dur': 0.05, 'mask_dur': 0, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 2, 'mask_cond': 1, 'face_dur': 0.01666666666666667, 'mask_dur': 0.2, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 2, 'mask_cond': 1, 'face_dur': 0.03333333333333333, 'mask_dur': 0.2, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 2, 'mask_cond': 1, 'face_dur': 0.05, 'mask_dur': 0.2, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 2, 'mask_cond': 0, 'face_dur': 0.01666666666666667, 'mask_dur': 0, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 2, 'mask_cond': 0, 'face_dur': 0.03333333333333333, 'mask_dur': 0, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 2, 'mask_cond': 0, 'face_dur': 0.05, 'mask_dur': 0, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 3, 'mask_cond': 1, 'face_dur': 0.01666666666666667, 'mask_dur': 0.2, 'ratio_hw': 1, 'ratio_wh': 1},
      {'trials': 3, 'mask_cond': 1, 'face_dur': 0.03333333333333333, 'mask_dur': 0.2, 'ratio_hw': 1, 'ratio_wh': 1}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
    Routine fixation_vis
    Routine target_vis
    Routine pas
  LoopTerminator trials_vis
  Routine end_visibility_2
  Routine stim_response_instr
  Routine catch_insrt
  Routine face_instr
  Routine instr_prac
  Routine init_prac
  LoopInitiator duringprac loopType="TrialHandler"
    Selected rows = $trials_prac
    conditionsFile = face_cond.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'face1': 'face/f5.png', 'face2': 'face/f1.png', 'mask_cond': 0, 'Ecc': 'LPF', 'Catch': 0, 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0.2},
      {'face1': 'face/f5.png', 'face2': 'face/f1.png', 'mask_cond': 0, 'Ecc': 'RPF', 'Catch': 0, 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0.2},
      {'face1': 'face/f5.png', 'face2': 'face/f1.png', 'mask_cond': 1, 'Ecc': 'LPF', 'Catch': 1, 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0},
      {'face1': 'face/f5.png', 'face2': 'face/f1.png', 'mask_cond': 1, 'Ecc': 'RPF', 'Catch': 1, 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0},
      {'face1': 'face/f5.png', 'face2': 'face/f2.png', 'mask_cond': 0, 'Ecc': 'LPF', 'Catch': 0, 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0.2},
      {'face1': 'face/f5.png', 'face2': 'face/f2.png', 'mask_cond': 0, 'Ecc': 'RPF', 'Catch': 0, 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0.2},
      {'face1': 'face/f5.png', 'face2': 'face/f2.png', 'mask_cond': 1, 'Ecc': 'LPF', 'Catch': 0, 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0},
      {'face1': 'face/f5.png', 'face2': 'face/f2.png', 'mask_cond': 1, 'Ecc': 'RPF', 'Catch': 0, 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0}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
    Routine fixation_prac
    Routine Stim1_display_prac
    Routine response_prac
    Routine responseprac_feedback
    Routine summary_prac
    Routine special_trial_prac
    Routine catch_prac
    Routine summary2_prac
  LoopTerminator duringprac
  Routine sum_resp_prac
  Routine expl_summary_2
  Routine begin
  LoopInitiator trials_exp loopType="TrialHandler"
    conditionsFile = face_cond.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'face1': 'face/f5.png', 'face2': 'face/f1.png', 'mask_cond': 1, 'Ecc': 'LPF', 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0.2},
      {'face1': 'face/f5.png', 'face2': 'face/f1.png', 'mask_cond': 1, 'Ecc': 'RPF', 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0.2},
      {'face1': 'face/f5.png', 'face2': 'face/f1.png', 'mask_cond': 0, 'Ecc': 'LPF', 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0},
      {'face1': 'face/f5.png', 'face2': 'face/f1.png', 'mask_cond': 0, 'Ecc': 'RPF', 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0},
      {'face1': 'face/f5.png', 'face2': 'face/f2.png', 'mask_cond': 1, 'Ecc': 'LPF', 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0.2},
      {'face1': 'face/f5.png', 'face2': 'face/f2.png', 'mask_cond': 1, 'Ecc': 'RPF', 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0.2},
      {'face1': 'face/f5.png', 'face2': 'face/f2.png', 'mask_cond': 0, 'Ecc': 'LPF', 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0},
      {'face1': 'face/f5.png', 'face2': 'face/f2.png', 'mask_cond': 0, 'Ecc': 'RPF', 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0},
      {'face1': 'face/f5.png', 'face2': 'face/f3.png', 'mask_cond': 1, 'Ecc': 'LPF', 'face_dur': 0.03333333333333333, 'ratio_hw': 1, 'ratio_wh': 1, 'mask_dur': 0.2}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
    Routine fixation
    Routine Stim1_display
    Routine response
    Routine response_2
    Routine sum_resp_2
    Routine special_trial
    Routine catch_1
    Routine response_sum
  LoopTerminator trials_exp
  Routine survey1
  Routine survey2
  Routine survey3
  Routine survey_4
  Routine survey6
  Routine survey7
